PsychoPy2experiment version="2022.2.5"
Settings
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Show mouse = True
  Units = height
  Window size (pixels) = [1536, 864]
  expName = odd_one_out_experiment
  keyboardBackend = ioHub
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Routines
  Routine welcome
    TextComponent welcomeText
      letterHeight = 0.04
      startVal [time (s)] = 0.0
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      text:
        Welcome, in this task you will be presented with three chess scenario's, side-by-side.

        It is your task to select the odd-one-out. In other words, there is one scenario the most different when comparing to the other two scenario's.
        To select the odd-one-out you can use your mouse. Click on the scenario you think is the most distinct.

        We will start with a few practice rounds.

        Press <space> to continue...
    KeyboardComponent key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 1
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  Routine practice
    ImageComponent image
      image [set every repeat] = $'../datasets/fmri_dataset/images/' + Stim1
      pos = (-0.5, 0)
      size = (0.4, 0.4)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
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    ImageComponent image_2
      image [set every repeat] = $'../datasets/fmri_dataset/images/' + Stim2
      size = (0.4, 0.4)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
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    ImageComponent image_3
      image [set every repeat] = $'../datasets/fmri_dataset/images/' + Stim3
      pos = (0.5, 0)
      size = (0.4, 0.4)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
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  Routine experiment
  Routine exit
Flow
  Routine welcome
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = triplets.csv
    loopType = sequential
    nReps = 10
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    conditions:
      [OrderedDict([('Stim1', 'NC5_Images_EasyPosition5(Nomate)(Reversed).png'), ('Stim2', 'NC3_Images_Replacement5(Nomate).png'), ('Stim3', 'NC3_Images_MalininAndreev(Nomate)(Reversed).png')]),
      OrderedDict([('Stim1', 'NC3_Images_Replacement5(Nomate).png'), ('Stim2', 'NC4_Images_IvanchukSavchenko(Nomate)(Reversed).png'), ('Stim3', 'C3_Images_PodzerovKuntzevic(Reversed).png')]),
      OrderedDict([('Stim1', 'NC3_Images_MalininAndreev(Nomate)(Reversed).png'), ('Stim2', 'C3_Images_TylorWinter.png'), ('Stim3', 'NC3_Images_PodzerovKuntzevic(Nomate)(Reversed).png')]),
      OrderedDict([('Stim1', 'NC3_Images_StudybyErcoleDelRio(Nomate)(Reversed).png'), ('Stim2', 'C2_Images_KrauseMeinhardt.png'), ('Stim3', 'C1_Images_Frombeautiful.png')]),
      OrderedDict([('Stim1', 'C3_Images_Replacement3.png'), ('Stim2', 'NC3_Images_PodzerovKuntzevic(Nomate)(Reversed).png'), ('Stim3', 'NC3_Images_Replacement3(Nomate).png')]),
      OrderedDict([('Stim1', 'NC3_Images_PodzerovKuntzevic(Nomate)(Reversed).png'), ('Stim2', 'NC3_Images_StudybyErcoleDelRio(Nomate)(Reversed).png'), ('Stim3', 'C1_Images_Frombeautiful.png')]),
      OrderedDict([('Stim1', 'C1_Images_SteinitzNN.png'), ('Stim2', 'C1_Images_Frombeautiful.png'), ('Stim3', 'C3_Images_PodzerovKuntzevic(Reversed).png')]),
      OrderedDict([('Stim1', 'C2_Images_KrauseMeinhardt.png'), ('Stim2', 'NC5_Images_EasyPosition5(Nomate)(Reversed).png'), ('Stim3', 'C5_Images_EasyPosition5(Reversed).png')])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
    Routine practice
  LoopTerminator trials
  Routine experiment
  Routine exit
